PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine EO_Condition
    PolygonComponent polygon
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    TextComponent eo_Stroop_word
      color [set every repeat] = $eo_WordColor
      letterHeight = 0.1
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      text [set every repeat] = $eo_WordItem
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    TextComponent eo_fixation_cross
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 2.75
      stopVal [duration (s)] = 0.5
      text = +
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    KeyboardComponent key_resp_2
      allowedKeys = 'd','f','j','k'
      forceEndRoutine = True
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    MovieComponent eo_video
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $eo_video
      size = [28.8,16.2]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = cm
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  Routine FO_Condition
    PolygonComponent background7
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    MovieComponent fo_video
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $fo_video
      size = [28.8,16.2]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = cm
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    TextComponent fo_fixation_cross
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 2.75
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent fo_word
      color [set every repeat] = $fo_WordColor
      letterHeight = 0.1
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      text [set every repeat] = $fo_WordItem
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    KeyboardComponent key_resp_3
      allowedKeys = 'd','f','j','k'
      forceEndRoutine = True
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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  Routine NF_Condition
    PolygonComponent background8
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    MovieComponent nf_video
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $nf_video
      size = [28.8,16.2]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = cm
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    TextComponent nf_fixation_cross
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 2.75
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent nf_word
      color [set every repeat] = $nf_WordColor
      letterHeight = 0.1
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      text [set every repeat] = $nf_WordItem
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    KeyboardComponent key_resp_4
      allowedKeys = 'd','f','j','k'
      forceEndRoutine = True
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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  Routine Practice_Trial
  Routine Baseline_Stroop
    PolygonComponent background5
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    TextComponent baseline_stroop_word
      color [set every repeat] = $WordColor
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2
      text [set every repeat] = $WordItem
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    TextComponent baseline_fixation
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 'd','f','j','k'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2
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  Routine Instruction__screen
    PolygonComponent backGroud1
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent code1
      Code Type = Py
      Begin Experiment:
        #resources
        #word
        food = ["cake","sugar","doughnut","hamburger","chips","caramel","crisps","kebab","pizza","cream"]

        neutral = ["desk","ruler","scissors","envelops","files","monitor","blinds","memos","table","books"]

        all_list=[[['cake'], ['red', 'green', 'deepskyblue', 'gold']],
        [['sugar'], ['red', 'green', 'deepskyblue', 'gold']],
        [['doughnut'], ['red', 'green', 'deepskyblue', 'gold']],
        [['hamburger'], ['red', 'green', 'deepskyblue', 'gold']],
        [['chips'], ['red', 'green', 'deepskyblue', 'gold']],
        [['caramel'], ['red', 'green', 'deepskyblue', 'gold']],
        [['crisps'], ['red', 'green', 'deepskyblue', 'gold']],
        [['kebab'], ['red', 'green', 'deepskyblue', 'gold']],
        [['pizza'], ['red', 'green', 'deepskyblue', 'gold']],
        [['cream'], ['red', 'green', 'deepskyblue', 'gold']],
        [['desk'], ['red', 'green', 'deepskyblue', 'gold']],
        [['ruler'], ['red', 'green', 'deepskyblue', 'gold']],
        [['scissors'], ['red', 'green', 'deepskyblue', 'gold']],
        [['envelops'], ['red', 'green', 'deepskyblue', 'gold']],
        [['files'], ['red', 'green', 'deepskyblue', 'gold']],
        [['monitor'], ['red', 'green', 'deepskyblue', 'gold']],
        [['blinds'], ['red', 'green', 'deepskyblue', 'gold']],
        [['memos'], ['red', 'green', 'deepskyblue', 'gold']],
        [['table'], ['red', 'green', 'deepskyblue', 'gold']],
        [['books'], ['red', 'green', 'deepskyblue', 'gold']]]

        color = ["red","deepskyblue", "green", "gold" ]

        nTrial1=80

        #video
        videoA = ["resources/ECE_01.mp4", "resources/ECE_02.mp4", "resources/ECE_03.mp4", "resources/ECE_05.mp4", "resources/ECE_06.mp4",
        "resources/ECE_07.mp4", "resources/ECE_08.mp4", "resources/ECE_10.mp4", "resources/ECE_11.mp4", "resources/ECE_12.mp4",
        "resources/ECE_13.mp4", "resources/ECE_14.mp4", "resources/ECE_15.mp4", "resources/HCE_01.mp4", "resources/HCE_02.mp4",
        "resources/HCE_03.mp4", "resources/HCE_04.mp4", "resources/HCE_05.mp4", "resources/HCE_06.mp4", "resources/HCE_07.mp4",
        "resources/HCE_10.mp4", "resources/HCE_11.mp4", "resources/HCE_12.mp4", "resources/HCE_13.mp4", "resources/HCE_14.mp4",
        "resources/HCE_15.mp4", "resources/KCE_02.mp4", "resources/KCE_03.mp4", "resources/KCE_04.mp4", "resources/KCE_05.mp4",
        "resources/KCE_06.mp4", "resources/KCE_07.mp4", "resources/KCE_08.mp4", "resources/KCE_09.mp4", "resources/KCE_10.mp4",
        "resources/KCE_11.mp4", "resources/KCE_12.mp4", "resources/KCE_13.mp4", "resources/KCE_14.mp4", "resources/KCE_15.mp4"];

        videoB = ["resources/ECC_01.mp4", "resources/ECC_02.mp4", "resources/ECC_03.mp4", "resources/ECC_04.mp4", "resources/ECC_05.mp4",
        "resources/ECC_06.mp4", "resources/ECC_07.mp4", "resources/ECC_08.mp4", "resources/ECC_09.mp4", "resources/ECC_10.mp4",
        "resources/ECC_12.mp4", "resources/ECC_13.mp4", "resources/ECC_14.mp4", "resources/ECC_15.mp4", "resources/HCC_01.mp4",
        "resources/HCC_02.mp4", "resources/HCC_03.mp4", "resources/HCC_04.mp4", "resources/HCC_05.mp4", "resources/HCC_06.mp4",
        "resources/HCC_07.mp4", "resources/HCC_08.mp4", "resources/HCC_09.mp4", "resources/HCC_10.mp4", "resources/HCC_12.mp4",
        "resources/HCC_13.mp4", "resources/HCC_14.mp4", "resources/KCC_01.mp4", "resources/KCC_02.mp4", "resources/KCC_03.mp4",
        "resources/KCC_04.mp4", "resources/KCC_05.mp4", "resources/KCC_06.mp4", "resources/KCC_07.mp4", "resources/KCC_08.mp4",
        "resources/KCC_10.mp4", "resources/KCC_11.mp4", "resources/KCC_13.mp4", "resources/KCC_14.mp4", "resources/KCC_15.mp4",];

        videoC = ["resources/EBC_01.mp4", "resources/EBC_02.mp4", "resources/EBC_03.mp4", "resources/EBC_04.mp4", "resources/EBC_05.mp4",
        "resources/EBC_06.mp4", "resources/EBC_07.mp4", "resources/EBC_08.mp4", "resources/EBC_09.mp4", "resources/EBC_12.mp4",
        "resources/EBC_13.mp4", "resources/EBC_14.mp4", "resources/EBC_15.mp4", "resources/HBC_01.mp4", "resources/HBC_02.mp4",
        "resources/HBC_03.mp4", "resources/HBC_04.mp4", "resources/HBC_05.mp4", "resources/HBC_08.mp4", "resources/HBC_09.mp4",
        "resources/HBC_10.mp4", "resources/HBC_11.mp4", "resources/HBC_12.mp4", "resources/HBC_13.mp4", "resources/HBC_14.mp4",
        "resources/HBC_15.mp4", "resources/KBC_02.mp4", "resources/KBC_03.mp4", "resources/KBC_04.mp4", "resources/KBC_05.mp4",
        "resources/KBC_06.mp4", "resources/KBC_07.mp4", "resources/KBC_08.mp4", "resources/KBC_09.mp4", "resources/KBC_10.mp4",
        "resources/KBC_11.mp4", "resources/KBC_12.mp4", "resources/KBC_13.mp4", "resources/KBC_14.mp4", "resources/KBC_15.mp4"];

        import random
        random.seed

        random.shuffle(videoA)
        random.shuffle(videoB)
        random.shuffle(videoC)

        #extract number from list
        def lst_to_num(col_index):
            for num in col_index:
                return num

        def create_word_lst(word_color_lst):
            word_lst=[]
            for i in range(len(word_color_lst)):
                word_lst.append(word_color_lst[i][0][0])
            return word_lst

        def create_color_lst(word_color_lst):
            color_lst=[]
            for wordIndex in range(len(word_color_lst)):
                #choose a random color
                colorIndex=(random.choices(range(len(word_color_lst[wordIndex][1]))))#randomly choose from 1:len(color)
                color=word_color_lst[wordIndex][1].pop(lst_to_num(colorIndex))#Store the color and remove the selected color from future color pool
                color_lst.append(color)
            return color_lst

        def create_condition_wd_clr_lst(lst1):
            random.shuffle(lst1)
            #Create 1st wordlist and color_lst in eo condition
            word_lst1=create_word_lst(lst1)
            color_lst1=create_color_lst(lst1)

            #shuffle the word_color_lst
            lst2=lst1.copy()
            random.shuffle(lst2)

            #Create 2nd wordlist and color_lst in eo condition
            word_lst2=create_word_lst(lst2)
            color_lst2=create_color_lst(lst2)

            word_lst=word_lst1+word_lst2
            color_lst=color_lst1+color_lst2

            return (word_lst, color_lst)

        #resources for conditions
        eo_wd_clr_lst1=[[['cake'], ['red', 'green', 'deepskyblue', 'gold']],
        [['sugar'], ['red', 'green', 'deepskyblue', 'gold']],
        [['doughnut'], ['red', 'green', 'deepskyblue', 'gold']],
        [['hamburger'], ['red', 'green', 'deepskyblue', 'gold']],
        [['chips'], ['red', 'green', 'deepskyblue', 'gold']],
        [['caramel'], ['red', 'green', 'deepskyblue', 'gold']],
        [['crisps'], ['red', 'green', 'deepskyblue', 'gold']],
        [['kebab'], ['red', 'green', 'deepskyblue', 'gold']],
        [['pizza'], ['red', 'green', 'deepskyblue', 'gold']],
        [['cream'], ['red', 'green', 'deepskyblue', 'gold']],
        [['desk'], ['red', 'green', 'deepskyblue', 'gold']],
        [['ruler'], ['red', 'green', 'deepskyblue', 'gold']],
        [['scissors'], ['red', 'green', 'deepskyblue', 'gold']],
        [['envelops'], ['red', 'green', 'deepskyblue', 'gold']],
        [['files'], ['red', 'green', 'deepskyblue', 'gold']],
        [['monitor'], ['red', 'green', 'deepskyblue', 'gold']],
        [['blinds'], ['red', 'green', 'deepskyblue', 'gold']],
        [['memos'], ['red', 'green', 'deepskyblue', 'gold']],
        [['table'], ['red', 'green', 'deepskyblue', 'gold']],
        [['books'], ['red', 'green', 'deepskyblue', 'gold']]]


        fo_wd_clr_lst1=[[['cake'], ['red', 'green', 'deepskyblue', 'gold']],
        [['sugar'], ['red', 'green', 'deepskyblue', 'gold']],
        [['doughnut'], ['red', 'green', 'deepskyblue', 'gold']],
        [['hamburger'], ['red', 'green', 'deepskyblue', 'gold']],
        [['chips'], ['red', 'green', 'deepskyblue', 'gold']],
        [['caramel'], ['red', 'green', 'deepskyblue', 'gold']],
        [['crisps'], ['red', 'green', 'deepskyblue', 'gold']],
        [['kebab'], ['red', 'green', 'deepskyblue', 'gold']],
        [['pizza'], ['red', 'green', 'deepskyblue', 'gold']],
        [['cream'], ['red', 'green', 'deepskyblue', 'gold']],
        [['desk'], ['red', 'green', 'deepskyblue', 'gold']],
        [['ruler'], ['red', 'green', 'deepskyblue', 'gold']],
        [['scissors'], ['red', 'green', 'deepskyblue', 'gold']],
        [['envelops'], ['red', 'green', 'deepskyblue', 'gold']],
        [['files'], ['red', 'green', 'deepskyblue', 'gold']],
        [['monitor'], ['red', 'green', 'deepskyblue', 'gold']],
        [['blinds'], ['red', 'green', 'deepskyblue', 'gold']],
        [['memos'], ['red', 'green', 'deepskyblue', 'gold']],
        [['table'], ['red', 'green', 'deepskyblue', 'gold']],
        [['books'], ['red', 'green', 'deepskyblue', 'gold']]]


        nf_wd_clr_lst1=[[['cake'], ['red', 'green', 'deepskyblue', 'gold']],
        [['sugar'], ['red', 'green', 'deepskyblue', 'gold']],
        [['doughnut'], ['red', 'green', 'deepskyblue', 'gold']],
        [['hamburger'], ['red', 'green', 'deepskyblue', 'gold']],
        [['chips'], ['red', 'green', 'deepskyblue', 'gold']],
        [['caramel'], ['red', 'green', 'deepskyblue', 'gold']],
        [['crisps'], ['red', 'green', 'deepskyblue', 'gold']],
        [['kebab'], ['red', 'green', 'deepskyblue', 'gold']],
        [['pizza'], ['red', 'green', 'deepskyblue', 'gold']],
        [['cream'], ['red', 'green', 'deepskyblue', 'gold']],
        [['desk'], ['red', 'green', 'deepskyblue', 'gold']],
        [['ruler'], ['red', 'green', 'deepskyblue', 'gold']],
        [['scissors'], ['red', 'green', 'deepskyblue', 'gold']],
        [['envelops'], ['red', 'green', 'deepskyblue', 'gold']],
        [['files'], ['red', 'green', 'deepskyblue', 'gold']],
        [['monitor'], ['red', 'green', 'deepskyblue', 'gold']],
        [['blinds'], ['red', 'green', 'deepskyblue', 'gold']],
        [['memos'], ['red', 'green', 'deepskyblue', 'gold']],
        [['table'], ['red', 'green', 'deepskyblue', 'gold']],
        [['books'], ['red', 'green', 'deepskyblue', 'gold']]]


        random.shuffle(eo_wd_clr_lst1)
        random.shuffle(fo_wd_clr_lst1)
        random.shuffle(nf_wd_clr_lst1)

        #Randomize order for all conditions

        word_color_lst1=all_list
        random.shuffle(word_color_lst1)

        #Generate the first word list
        word_lst1=create_word_lst(word_color_lst1)
        #generate the first color list
        color_lst1=create_color_lst(word_color_lst1)
        word_color_lst2=word_color_lst1
        random.shuffle(word_color_lst2)

        #Generate the second wordlist & colorlist
        word_lst2=create_word_lst(word_color_lst2)
        color_lst2=create_color_lst(word_color_lst2)

        #Randomize the list
        word_color_lst3=word_color_lst2
        random.shuffle(word_color_lst3)

        #generate the 3rd word and color lst
        word_lst3=create_word_lst(word_color_lst3)
        color_lst3=create_color_lst(word_color_lst3)

        #Randomize the list
        word_color_lst4=word_color_lst3
        random.shuffle(word_color_lst4)

        #generate the 4th word and color lst
        word_lst4=create_word_lst(word_color_lst4)
        color_lst4=create_color_lst(word_color_lst4)

        #word_color_lst4

        all_word_lst=word_lst1+word_lst2+word_lst3+word_lst4
        all_color_lst=color_lst1+color_lst2+color_lst3+color_lst4

        word_color_lst_all=[[]]*nTrial1

        for i in range(nTrial1):
            word_color_lst_all[i]=[all_word_lst[i], all_color_lst[i]]

        #print(word_color_lst_all)#for debug

        #For each condition
        eo_word_lst, eo_color_lst=create_condition_wd_clr_lst(eo_wd_clr_lst1)
        fo_word_lst, fo_color_lst=create_condition_wd_clr_lst(fo_wd_clr_lst1)
        nf_word_lst, nf_color_lst=create_condition_wd_clr_lst(nf_wd_clr_lst1)
    TextComponent Instruction
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        There are two sections in this part of the experiment:

        In the first section, you will complete some color-naming tasks, in which you will name the color of the word presented in the center of the screen by pressing corresponding keyboard keys :

        Press 'd' for red;
        Press 'f' for green,
        Press 'j' for blue,
        Press 'k' fpr black

        In the second section, you will watch some short video clips. After each video clip, you will complete a color-naming task, which will be similar to what you will do in the first section(Press 'd' for red; press 'f' for green, press 'j' for blue, press 'k' for black).

        To familiarize you with the task, there will be 15 practice trials for the color-naming task at the begining of this section. No video clips will be included in practice trials.

        Press the 'right arrow' key if you are ready to proceed.
    KeyboardComponent begin_exp
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine Baseline_code
    CodeComponent code_baseline
      Code Type = Py
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      Begin Experiment:
        baseline_trial=0
      Begin Routine:
        #assigning baseline word
        WordItem=all_word_lst[baseline_trial]
        WordColor=all_color_lst[baseline_trial]

        WordType = "undefined"
        if WordItem in food:
            WordType = "food"
        if WordItem in neutral:
            WordType = "neutral"

        #Record variables
        thisExp.addData('wordContent', WordItem)
        thisExp.addData('wordColor', WordColor)
        thisExp.addData('wordType', WordType)

        #update trial num
        baseline_trial+=1
  Routine EO_condition
  Routine EO_CODE
    CodeComponent eoCode
      Code Type = Auto->JS
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      Begin Experiment:
        #Initiate trial number
        eo_trial=0

        #for debug
        print(eo_word_lst)
        print(eo_color_lst)
      Begin Routine:
        #assigning baseline word
        eo_WordItem=eo_word_lst[eo_trial]
        eo_WordColor=eo_color_lst[eo_trial]
        eo_video=videoA[eo_trial]

        eo_WordType = "undefined"
        if eo_WordItem in food:
            eo_WordType = "food"
        if eo_WordItem in neutral:
            eo_WordType = "neutral"

        eo_condition='EO'

        #Record variables
        thisExp.addData('wordContent', eo_WordItem)
        thisExp.addData('wordColor', eo_WordColor)
        thisExp.addData('wordType', eo_WordType)
        thisExp.addData('Condition', eo_condition)

        #update trial num
        eo_trial+=1
  Routine Begin_Video_obs_task
    PolygonComponent background6
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent begin_video_obs
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      wrapWidth = 1.5
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      text:
        In the following section, you will watch some short video clips. After each video clip, you will complete a color-naming task, which will be similar to what you will do in previous section.

        For the color naming task after each video clip:
        Press 'd' for red;
        Press 'f' for green;
        Press 'j' for blue;
        Press 'k' for black.

        Press the 'right arrow' key to proceed.
    KeyboardComponent proceed_to_conditions
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Break
    PolygonComponent background9
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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    TextComponent Break_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 600
      text = Now, you can take a break for up to 10 minutes. The experiment will proceed after 10 minutes, but you can end the break early by pressing 'right arrow' key.
      wrapWidth = 1.5
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    KeyboardComponent end_break
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 600
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  Routine FO_CODE
    CodeComponent focode
      Code Type = Auto->JS
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      Begin Experiment:
        fo_trial=0

        #Debug purpose
        print(fo_word_lst)
        print(fo_color_lst)
      Begin Routine:
        #assigning baseline word
        fo_WordItem=fo_word_lst[fo_trial]
        fo_WordColor=fo_color_lst[fo_trial]
        fo_video=videoB[fo_trial]

        fo_WordType = "undefined"
        if fo_WordItem in food:
            fo_WordType = "food"
        if fo_WordItem in neutral:
            fo_WordType = "neutral"

        fo_condition='FO'

        #Record variables
        thisExp.addData('wordContent', fo_WordItem)
        thisExp.addData('wordColor', fo_WordColor)
        thisExp.addData('wordType', fo_WordType)
        thisExp.addData('Condition', fo_condition)

        #update trial num
        fo_trial+=1
  Routine NF_CODE
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        nf_trial=0

        #Debug
        print(nf_word_lst)
        print(nf_color_lst)
      Begin Routine:
        #assigning baseline word
        nf_WordItem=nf_word_lst[nf_trial]
        nf_WordColor=nf_color_lst[nf_trial]
        nf_video=videoC[nf_trial]

        nf_WordType = "undefined"
        if nf_WordItem in food:
            nf_WordType = "food"
        if nf_WordItem in neutral:
            nf_WordType = "neutral"

        nf_condition='NF'

        #Record variables
        thisExp.addData('wordContent', nf_WordItem)
        thisExp.addData('wordColor', nf_WordColor)
        thisExp.addData('wordType', nf_WordType)
        thisExp.addData('Condition', nf_condition)

        #update trial num
        nf_trial+=1
  Routine fo_trials
  Routine Remainder
    PolygonComponent background10
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent stroop_remainder
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Please determine the color of the word presented in the center of the screen after the video by pressing corresponding keyboard keys:

        Press 'd' for red,
        Press 'f' for green,
        Press 'j' for blue,
        Press 'k' fpr black

        Press the 'right arrow' key to proceed.
    KeyboardComponent proceed_to_next_condition
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Counter_balance_code
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        #order of the conditions. Latin square counterbalance
        order_lst=[[1,2,3],[3,1,2],[2,3,1]]
        #whether a condition appears
        eo_presence=[[1,0,0],[0,1,0], [0,0,1]]
        fo_presence=[[0,1,0],[0,0,1], [1,0,0]]
        nf_presence=[[0,0,1],[1,0,0], [0,1,0]]

        #choose which order to use
        #{0:[eo,fo,nf],1:[nf,eo,fo],2:[fo,nf,eo]}
        cdt_order=random.choice([0,1,2])
        thisExp.addData('cdt_order', cdt_order)

        #Initialize the amount of condition that has been shown
        cdt_num=0

        #Trial number for each condition
        nTrial=40
      Begin Routine:
        #Loop 3 times overall
        #Decide whether a condition appear and loops at the begining of the current loop
        nRepA=eo_presence[cdt_order][cdt_num]*nTrial
        nRepB=fo_presence[cdt_order][cdt_num]*nTrial
        nRepC=nf_presence[cdt_order][cdt_num]*nTrial
  Routine cdt_num_plus_one
    CodeComponent cdt_plus_one
      Code Type = Auto->JS
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      End Routine:
        cdt_num+=1
  Routine BreakCode
    CodeComponent breakcode
      Code Type = Auto->JS
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      Begin Routine:
        if cdt_num<=2:
            nRepBreak=1
        else:
            nRepBreak=0
  Routine PracticeTrials
    PolygonComponent background3
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    TextComponent practiceFixation
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
      wrapWidth = 1.5
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    TextComponent practice_word
      color [set every repeat] = $prt_color
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2
      text [set every repeat] = $prt_word
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    KeyboardComponent practice_key
      allowedKeys = 'd','f','j','k'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2
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  Routine practice_ins
    PolygonComponent backgroud2
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent prac_inst
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      wrapWidth = 1.5
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      text:
        You will first complete 15 practice Trail.

        Please determine the color of the word presented in the center of the screen by pressing corresponding keyboard keys :

        Press 'd' for red;
        Press 'f' for green,
        Press 'j' for blue,
        Press 'k' fpr black

        Press 'right arrow' key to proceed to practice trials.
    KeyboardComponent practiceTrial_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine BeginBaseline
    PolygonComponent background4
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent beginexp
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      wrapWidth = 1.5
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      text:
        Now you have completed the practice trials and can proceed to experimental trials.

        In the following section, you will complete some color-naming tasks, in which you will name the color of the word presented in the center of the screen by pressing corresponding keyboard keys :

        Press 'd' for red;
        Press 'f' for green,
        Press 'j' for blue,
        Press 'k' fpr black

        Press 'right arrow' to proceed to section 1
    KeyboardComponent begin_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine preloadVideo
    PolygonComponent PreloadBackground
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine vasInstruction
    PolygonComponent polygon_3
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent vasIns
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        For the following five questions, please indicate your feelings by marking on the continuum with your mouse.

        Press the 'right arrow' key to proceed.
    KeyboardComponent proceed_VAS
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VAS
    PolygonComponent polygon_2
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent VAStext1
      color = black
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = How much food do you think you could eat?
      wrapWidth = 1.5
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    SliderComponent VAS1
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = ('No food at all', 'A large amount of food')
      letterHeight = 0.03
      pos = (0, 0.34)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 100)
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    TextComponent VAStext2
      color = black
      letterHeight = 0.035
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = How strong is your desire to eat?
      wrapWidth = 1.5
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    SliderComponent VAS2
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 0
      labels = ('Very weak','Very strong')
      letterHeight = 0.03
      pos = (0, 0.19)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0,100)
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    TextComponent VAStext3
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = How hungry do you feel?
      wrapWidth = 1.5
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    SliderComponent VAS3
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 0
      labels = ('Not at all','As hungery as I have ever felt')
      letterHeight = 0.03
      pos = (0, 0.04)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0,100)
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    TextComponent VAStext4
      color = black
      letterHeight = 0.035
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = What is your level of satiety?
      wrapWidth = 1.5
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    SliderComponent VAS4
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 0
      labels = ('Not satiated at all','Very high')
      letterHeight = 0.03
      pos = (0, -0.11)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 100)
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    TextComponent VAStext5
      color = black
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = How full do you feel?
      wrapWidth = 1.5
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    SliderComponent VAS5
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 0
      labels = ('Not at all full','Very full')
      letterHeight = 0.03
      pos = (0, -0.26)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0,100)
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    TextComponent proceed
      color = black
      letterHeight = 0.026
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the 'right arrow' key to proceed. Your answer on this page cannot be changed after you move on to next section.
      wrapWidth = 1.8
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    KeyboardComponent key_resp_5
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine completionScreen
    PolygonComponent background11
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed this section of the study!
        Please inform the researcher.
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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Flow
  Routine Instruction__screen
  Routine vasInstruction
  Routine VAS
  Routine practice_ins
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = Practice Trial.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'prt_word': 'blender', 'prt_color': 'blue'},
      {'prt_word': 'television', 'prt_color': 'red'},
      {'prt_word': 'sweater', 'prt_color': 'red'},
      {'prt_word': 'door', 'prt_color': 'red'},
      {'prt_word': 'radio', 'prt_color': 'blue'},
      {'prt_word': 'number', 'prt_color': 'red'},
      {'prt_word': 'fur', 'prt_color': 'blue'},
      {'prt_word': 'speaker', 'prt_color': 'blue'},
      {'prt_word': 'towel', 'prt_color': 'red'},
      {'prt_word': 'collecting', 'prt_color': 'blue'},
      {'prt_word': 'moderate', 'prt_color': 'red'},
      {'prt_word': 'custom', 'prt_color': 'red'},
      {'prt_word': 'ceiling', 'prt_color': 'blue'},
      {'prt_word': 'barrel', 'prt_color': 'blue'},
      {'prt_word': 'window', 'prt_color': 'red'}]
    Routine PracticeTrials
  LoopTerminator practice
  Routine BeginBaseline
  LoopInitiator Baseline_trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine Baseline_code
    Routine Baseline_Stroop
  LoopTerminator Baseline_trials
  Routine vasInstruction
  Routine VAS
  Routine Begin_Video_obs_task
  LoopInitiator loop_for_ct_balance loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine Counter_balance_code
    LoopInitiator eo_trials loopType="TrialHandler"
      loopType = sequential
      nReps = nRepA
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      Routine EO_CODE
      Routine preloadVideo
      Routine EO_Condition
    LoopTerminator eo_trials
    LoopInitiator fo_loop loopType="TrialHandler"
      loopType = sequential
      nReps = nRepB
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      Routine FO_CODE
      Routine preloadVideo
      Routine FO_Condition
    LoopTerminator fo_loop
    LoopInitiator nf_trials loopType="TrialHandler"
      loopType = sequential
      nReps = nRepC
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      Routine NF_CODE
      Routine preloadVideo
      Routine NF_Condition
    LoopTerminator nf_trials
    Routine cdt_num_plus_one
    Routine BreakCode
    LoopInitiator whether_break loopType="TrialHandler"
      loopType = random
      nReps = nRepBreak
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      Routine vasInstruction
      Routine VAS
      Routine Break
      Routine Remainder
    LoopTerminator whether_break
  LoopTerminator loop_for_ct_balance
  Routine vasInstruction
  Routine VAS
  Routine completionScreen
